CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "BV480")
    Name to assign these images:BV480
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "COX2")
    Name to assign these images:COX2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PanCK")
    Name to assign these images:PanCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PTGER4")
    Name to assign these images:PTGER4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PIK3CA")
    Name to assign these images:PIK3CA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:BV480
    Name the primary objects to be identified:IdentifyBkgd
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.02,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:IdentifyBkgd
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:IdentifyBkgd
    Name the output objects:FilterBkgd
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:14
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:FilterBkgd
    Name the output image:FilterBkgd
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:FilterBkgd
    Select method for constructing file names:From image filename
    Select image name for file prefix:BV480
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Filtered
    Saved file format:tiff
    Output file location:Same folder as image|F:\\
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:COX2
    Name the primary objects to be identified:IdentifyCOX2
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.017,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:IdentifyCOX2
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:IdentifyCOX2
    Name the output objects:FilterCOX2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:FilterCOX2
    Name the output image:FilterCOX2
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:FilterCOX2
    Select method for constructing file names:From image filename
    Select image name for file prefix:COX2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Filtered
    Saved file format:tiff
    Output file location:Same folder as image|F:\\
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:DAPI
    Name the primary objects to be identified:IdentifyDAPI
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.009,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:IdentifyDAPI
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:17|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
    Select the objects to filter:IdentifyDAPI
    Name the output objects:FilterDAPI
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:18|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
    Select the input objects:FilterDAPI
    Name the output image:FilterDAPI
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:FilterDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Filtered
    Saved file format:tiff
    Output file location:Same folder as image|F:\\
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:PIK3CA
    Name the primary objects to be identified:IdentifyPIK3CA
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.016,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:IdentifyPIK3CA
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:22|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
    Select the objects to filter:IdentifyPIK3CA
    Name the output objects:FilterPIK3CA
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:FilterPIK3CA
    Name the output image:FilterPIK3CA
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:FilterPIK3CA
    Select method for constructing file names:From image filename
    Select image name for file prefix:PIK3CA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Filtered
    Saved file format:tiff
    Output file location:Same folder as image|F:\\
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyPrimaryObjects:[module_num:25|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
    Select the input image:PTGER4
    Name the primary objects to be identified:IdentifyPTGER4
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.016,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:26|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
    Select object sets to measure:IdentifyPTGER4
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:27|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
    Select the objects to filter:IdentifyPTGER4
    Name the output objects:FilterPTGER4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:28|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
    Select the input objects:FilterPIK3CA
    Name the output image:FilterPTGER4
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:FilterPTGER4
    Select method for constructing file names:From image filename
    Select image name for file prefix:PTGER4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Filtered
    Saved file format:tiff
    Output file location:Same folder as image|F:\\
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

IdentifyPrimaryObjects:[module_num:30|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
    Select the input image:PanCK
    Name the primary objects to be identified:IdentifyPanCK
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:31|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
    Select object sets to measure:IdentifyPanCK
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:32|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
    Select the objects to filter:IdentifyPanCK
    Name the output objects:FilterPanCK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:33|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
    Select the input objects:FilterPanCK
    Name the output image:FilterPanCK
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:FilterPanCK
    Select method for constructing file names:From image filename
    Select image name for file prefix:PanCK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Filtered
    Saved file format:tiff
    Output file location:Same folder as image|F:\\
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
