CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "PIK3CA")
    Name to assign these images:TotalArea
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:TotalArea
    Name the primary objects to be identified:IdentifyPrimaryTissue
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:IdentifyPrimaryTissue
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:IdentifyPrimaryTissue
    Name the output objects:FilterTissue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:FilterTissue
    Name the output image:TotalTissueArea
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:TotalTissueArea
    Select method for constructing file names:From image filename
    Select image name for file prefix:TotalArea
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TotalTissueArea
    Saved file format:tiff
    Output file location:Same folder as image|F:\\Step1_TotalArea
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
