CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "BV480")
    Name to assign these images:BV480
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "COX2")
    Name to assign these images:COX2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PanCK")
    Name to assign these images:PanCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PTGER4")
    Name to assign these images:PTGER4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PIK3CA")
    Name to assign these images:PIK3CA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TotalTissueArea")
    Name to assign these images:TotalTissueArea
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:BV480
    Name the output object:BV480Objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:TotalTissueArea
    Name the output object:TotalTissueAreaObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:7|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
    Select the input image:COX2
    Name the output object:COX2Objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:8|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
    Select the input image:DAPI
    Name the output object:DAPIObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:9|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
    Select the input image:PTGER4
    Name the output object:PTGER4Objects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:10|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
    Select the input image:PIK3CA
    Name the output object:PIK3CAObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:11|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
    Select the input image:PanCK
    Name the output object:PanCKObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:BV480Objects
    Name the output objects:BV480expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:13|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
    Select objects to be masked:PanCKObjects
    Name the masked objects:PanCK_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:14|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
    Select objects to be masked:DAPIObjects
    Name the masked objects:DAPI_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:15|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
    Select objects to be masked:COX2Objects
    Name the masked objects:COX2_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:16|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
    Select objects to be masked:PTGER4Objects
    Name the masked objects:PTGER4_Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:17|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
    Select objects to be masked:PIK3CAObjects
    Name the masked objects:PIK3CA__Masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BV480expand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:18|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
    Parent objects:DAPI_Masked
    Child objects:COX2_Masked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:COX2_relate
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
RelateObjects:[module_num:19|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
    Parent objects:DAPI_Masked
    Child objects:PTGER4_Masked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PTGER4_relate
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
RelateObjects:[module_num:20|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
    Parent objects:DAPI_Masked
    Child objects:PIK3CA__Masked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PIK3CA_relate
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
IdentifySecondaryObjects:[module_num:21|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
    Select the input objects:PanCK_Masked
    Name the objects to be identified:IdentifySecondPanCK
    Select the method to identify the secondary objects:Propagation
    Select the input image:PanCK
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:22|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
    Select objects to be masked:COX2_relate
    Name the masked objects:COX2_Epi
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:23|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
    Select objects to be masked:COX2_relate
    Name the masked objects:COX2_Stroma
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:24|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
    Select objects to be masked:PTGER4_relate
    Name the masked objects:PTGER4_Epi
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:25|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
    Select objects to be masked:PTGER4_relate
    Name the masked objects:PTGER4_Stroma
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:26|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
    Select objects to be masked:PIK3CA_relate
    Name the masked objects:PIK3CA_Epi
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:27|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
    Select objects to be masked:PIK3CA_relate
    Name the masked objects:PIK3CA_Stroma
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:28|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
    Select objects to be masked:TotalTissueAreaObjects
    Name the masked objects:StromaArea
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondPanCK
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:COX2_Epi
    Name the output image:COX2_EpiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:30|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
    Select the input objects:COX2_Stroma
    Name the output image:COX2_Stroma
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:31|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
    Select the input objects:COX2_relate
    Name the output image:COX2_Relate
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:32|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
    Select the input objects:PTGER4_Epi
    Name the output image:PTGER4_EpiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:33|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
    Select the input objects:PTGER4_Stroma
    Name the output image:PTGER4_Stroma
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:34|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
    Select the input objects:PTGER4_relate
    Name the output image:PTGER4_Related
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:35|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
    Select the input objects:PIK3CA_Epi
    Name the output image:PIK3CA_EpiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:36|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
    Select the input objects:PIK3CA_Stroma
    Name the output image:PIK3CA_Stroma
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:37|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
    Select the input objects:PIK3CA_relate
    Name the output image:PIK3CA_Related
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:38|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
    Select the input objects:IdentifySecondPanCK
    Name the output image:PanCK_Total
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:39|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
    Select the input objects:StromaArea
    Name the output image:StromaAreaImage
    Select the color format:Binary (black & white)
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
MeasureImageAreaOccupied:[module_num:40|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:COX2_EpiImage, COX2_Relate, PIK3CA_EpiImage, PIK3CA_Related, PTGER4_EpiImage, PTGER4_Related, PanCK_Total, StromaAreaImage
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
CalculateMath:[module_num:41|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
    Name the output measurement:TotalTissueArea
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:42|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
    Name the output measurement:COX2_EpiPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_COX2_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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
    Name the output measurement:COX2_StromaPos
    Operation:Subtract
    Select the minuend measurement type:Image
    Select the minuend objects:COX2_Stroma
    Select the minuend measurement:AreaOccupied_AreaOccupied_COX2_Relate
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
    Select the subtrahend objects:DAPI_Stroma
    Select the subtrahend measurement:AreaOccupied_AreaOccupied_COX2_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:44|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
    Name the output measurement:COX2_StromaPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_COX2_StromaPos
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:45|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
    Name the output measurement:COX2_TotalPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_COX2_Relate
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalTissueArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:46|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
    Name the output measurement:PTGER4_EpiPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PTGER4_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:47|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
    Name the output measurement:PTGER4_StromaPos
    Operation:Subtract
    Select the minuend measurement type:Image
    Select the minuend objects:PGE2EP4_Stroma
    Select the minuend measurement:AreaOccupied_AreaOccupied_PTGER4_Related
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
    Select the subtrahend objects:DAPI_Stroma
    Select the subtrahend measurement:AreaOccupied_AreaOccupied_PTGER4_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:48|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
    Name the output measurement:PTGER4_StromaPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_PTGER4_StromaPos
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:49|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
    Name the output measurement:PTGER4_TotalPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PTGER4_Related
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalTissueArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:50|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
    Name the output measurement:PIK3CA_EpiPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PIK3CA_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_PanCK_Total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:51|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
    Name the output measurement:PIK3CA_StromaPos
    Operation:Subtract
    Select the minuend measurement type:Image
    Select the minuend objects:PIK3CA_Stroma
    Select the minuend measurement:AreaOccupied_AreaOccupied_PIK3CA_Related
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
    Select the subtrahend objects:DAPI_Stroma
    Select the subtrahend measurement:AreaOccupied_AreaOccupied_PIK3CA_EpiImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:52|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
    Name the output measurement:PIK3CA_StromaPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_PIK3CA_StromaPos
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_StromaAreaImage
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:53|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
    Name the output measurement:PIK3CA_TotalPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_PIK3CA_Related
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalTissueArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:54|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Math_PTGER4_TotalPercent,Image|Math_PTGER4_StromaPos,Image|Math_PTGER4_StromaPercent,Image|Math_PTGER4_EpiPercent,Image|Math_PIK3CA_EpiPercent,Image|Math_PIK3CA_StromaPos,Image|Math_PIK3CA_StromaPercent,Image|Math_PIK3CA_TotalPercent,Image|Math_COX2_StromaPercent,Image|Math_COX2_StromaPos,Image|Math_COX2_EpiPercent,Image|Math_COX2_TotalPercent,Image|Math_TotalTissueArea,Image|AreaOccupied_AreaOccupied_COX2_EpiImage,Image|AreaOccupied_AreaOccupied_COX2_Relate,Image|AreaOccupied_AreaOccupied_PTGER4_Related,Image|AreaOccupied_AreaOccupied_PTGER4_EpiImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:FileName.csv
    Use the object name for the file name?:No
